PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import itertools
        #创建变量时不需要$，引用时才需要



        image_root = "./assets/attention_span"
        image_grid = image_root + "/grid.png"
        image_target = image_root + "/target.png"
        image_mark = image_root + "/mark.png"

        grid_width = 200
        grid_height = 200
        grid_cols = 5
        grid_rows = 5

        grids = []
        grids_state = []

        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n每次实验开始时，将会呈现若干目标，随后目标消失\n你需要点击鼠标回忆目标位置，全部标记后按空格提交\n明白后按空格进入练习"
        practice_confirm_text = "练习已结束\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "试验结束，感谢参与\n按空格退出"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"

        # PRACTICE CONFIG
        practice_repeats = 2

        show_duration = 1
        select_duration = 10
        level_total = 8
        level_current = 1
        target_count = 3

        def set_level(level_id):
            global target_count
            target_count = level_id + 2

        def generate_targets():
            grids = list(itertools.product(range(0,grid_rows),range(0,grid_cols)))
            return random.sample(grids,target_count)

        # EXPERIMENT CONFIG
        experiment_block_nums = level_total
        experiment_block_trials = 10
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"


        def get_pos(i,j):
            start_x = - grid_cols / 2 * grid_width + 0.5 * grid_width
            start_y = grid_rows / 2 * grid_height - 0.5 * grid_height
            y = start_y - i * grid_height
            x = start_x + j * grid_width
            return (x,y)#左上角为0,0

        def show_grids():
            for i in range(grid_rows):
                for j in range(grid_cols):
                    grids[i][j].setAutoDraw(True)

        def hide_grids():
            for i in range(grid_rows):
                for j in range(grid_cols):
                    grids[i][j].setAutoDraw(False)

        def select_grid(i,j):
            grids[i][j].image = image_mark

        def deselect_grid(i,j):
            grids[i][j].image = image_grid

        def click_grid(i,j):
            if(grids_state[i][j]):
                deselect_grid(i,j)
            else:
                select_grid(i,j)


        def show_target(i,j):
            grids[i][j].image = image_target

        def hide_target(i,j):
            grids[i][j].image = image_grid

        def show_all_targets(targets):
            for target in targets:
                show_target(target[0],target[1])

        def hide_all_targets(targets):
            for target in targets:
                hide_target(target[0],target[1])

        def deselect_all_grids(grids):
            for grid in grids:
                deselect_grid(grid[0],grid[1])
                grids_state[grid[0]][grid[1]] = False

        def build_grids():
            global grids,grids_state
            grids = []
            grids_state = []
            for i in range(grid_rows):
                grids.append([])
                grids_state.append([])
                for j in range(grid_cols):
                    temp = visual.ImageStim(
                        win=win,
                        name='image', units='pix',
                        image=image_grid, mask=None, anchor='center',
                        ori=0.0, pos=get_pos(i,j), size=(grid_width, grid_height),
                        color=[1,1,1], colorSpace='rgb', opacity=None,
                        flipHoriz=False, flipVert=False,
                        texRes=128.0, interpolate=True, depth=-2.0)
                    grids[i].append(temp)
                    grids_state[i].append(False)
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Psychopy不提供mouse release事件
        # 需要自己实现
        selection = None
        answer = set()

        # 必须要空格提交才算有效回答
        confirmed = False
      Each Frame:
        is_pressing = False

        for i in range(grid_rows):
                for j in range(grid_cols):
                    if(practice_mouse.isPressedIn(grids[i][j])):
                        is_pressing = True
                        if(selection is None):
                            click_grid(i,j)
                            selection = (i,j)


        if(not is_pressing and selection is not None):#release
            # 不判断is_pressing会出现drag
            i = selection[0]
            j = selection[1]
            selection = None
            grids_state[i][j] = not grids_state[i][j]
            if(grids_state[i][j]):
                answer.add((i,j))
            else:
                answer.remove((i,j))


        if(confirmed==False and practice_keyboard.status==STARTED and len(practice_keyboard.keys)>0):
            confirmed = True
            continueRoutine = False
      End Routine:
        deselect_all_grids(answer)
        hide_grids()
    MouseComponent practice_mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      stopVal [duration (s)] = $select_duration
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    KeyboardComponent practice_keyboard
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      stopVal [duration (s)] = $select_duration
      store = nothing
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Psychopy不提供mouse release事件
        # 需要自己实现
        selection = None
        answer = set()

        # 必须要空格提交才算有效回答
        confirmed = False
      Each Frame:
        is_pressing = False

        for i in range(grid_rows):
                for j in range(grid_cols):
                    if(experiment_mouse.isPressedIn(grids[i][j])):
                        is_pressing = True
                        if(selection is None):
                            click_grid(i,j)
                            selection = (i,j)


        if(not is_pressing and selection is not None):#release
            # 不判断is_pressing会出现drag
            i = selection[0]
            j = selection[1]
            selection = None
            grids_state[i][j] = not grids_state[i][j]
            if(grids_state[i][j]):
                answer.add((i,j))
            else:
                answer.remove((i,j))


        if(confirmed==False and experiment_keyboard.status==STARTED and len(experiment_keyboard.keys)>0):
            confirmed = True
            continueRoutine = False
            record(experiment_block_idx,experiment_trial_idx,"ReactTime",t-experiment_keyboard.tStart)
      End Routine:
        deselect_all_grids(answer)
        hide_grids()


        correct = confirmed and len(answer-set(targets))==0 and len(set(targets)-answer)==0

        record(experiment_block_idx,experiment_trial_idx,"Answer",answer)
        record(experiment_block_idx,experiment_trial_idx,"Submit",confirmed)
        record(experiment_block_idx,experiment_trial_idx,"Correct",correct)
        record(experiment_block_idx,experiment_trial_idx,"Level_Id",level_current)
        record(experiment_block_idx,experiment_trial_idx,"Level_TargetCount",target_count)





        experiment_trial_idx += 1
    KeyboardComponent experiment_keyboard
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $select_duration
      store = nothing
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    MouseComponent experiment_mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $select_duration
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
        experiment_trial_idx = 1
        level_current += 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"

        # DATA PREPARE
        import random

        set_level(level_current)
        build_grids()
  Routine practice_prepare_2
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        correct = confirmed and len(answer-set(targets))==0 and len(set(targets)-answer)==0
        if(correct):
            practice_response_tip.text = "正确"
        else:
            practice_response_tip.text = "错误"
  Routine experiment_prepare_2
  Routine level_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"


        set_level(level_current)
        build_grids()
  Routine experiment_prepare
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random

        level_current = 1
        experiment_trial_idx = 1
        experiment_block_idx = 1
  Routine practice_target
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"


        show_grids()

        targets = generate_targets()
        show_all_targets(targets)
      End Routine:
        hide_all_targets(targets)
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $show_duration
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  Routine experiment_target
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $show_duration
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment"


        show_grids()

        targets = generate_targets()
        show_all_targets(targets)

        record(experiment_block_idx,experiment_trial_idx,"Targets",targets)
      End Routine:
        hide_all_targets(targets)
Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    Routine practice_prepare
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_target
      Routine practice_trial
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  Routine experiment_prepare
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    Routine level_prepare
    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_target
      Routine experiment_trial
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
