PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        #创建变量时不需要$，引用时才需要

        # 参数接收模块 #bnu
        # 在PsychoPy Builder中测试时注释掉sys.argv并手动输入参数
        RECORD_NAME = sys.argv[1]
        DATA_ROOT = sys.argv[2]
        SUBJECT_NAME = sys.argv[3]

        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n在实验过程中，屏幕中央会呈现一个“＋”\n在“＋”消失后会出现一个数字，请做如下反应：\n若数字为7则单击鼠标左键，若不是“7”则不进行任何操作\n请在保证正确的前提下尽快进行反应\n明白实验后按空格键进入练习。"
        practice_confirm_text = "练习已结束\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "试验结束，感谢参与\n按空格退出"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"
        experiment_block_idx = 1

        # PRACTICE CONFIG
        practice_repeats = 8
        practice_positive_examples = 3

        # EXPERIMENT CONFIG
        experiment_block_nums = 4
        experiment_block_trials = 110
        experiment_positive_examples = 80
        experiment_idx = 0
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"
        practice_pressed = False

        # UPDATE TEXT
        current_num = shownum[practice_block.thisRepN]
        practice_number.text = current_num


        thisExp.addData("shownum",current_num)
      Each Frame:
        if(practice_pressed==False and practice_response.status==STARTED and practice_response.getPressed()[0]==1):
            practice_pressed = True
            thisExp.addData('practice_response.leftButton', 1)
            thisExp.addData('practice_response.reacttime', t-practice_response.tStart)
      End Routine:
        thisExp.addData('practice_response.enable', practice_response.tStart)
    TextComponent practice_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    TextComponent practice_number
      letterHeight = 0.4
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
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    MouseComponent practice_response
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.2
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment"
        experiment_pressed = False

        # UPDATE TEXT
        current_num = shownum[experiment_idx]
        experiment_number.text = current_num


        experiment_idx+=1
        thisExp.addData("index",experiment_idx)
        thisExp.addData("shownum",current_num)
      Each Frame:
        if(experiment_pressed==False and experiment_response.status==STARTED and experiment_response.getPressed()[0]==1):
            experiment_pressed = True
            thisExp.addData('experiment_response.leftButton', 1)
            thisExp.addData('experiment_response.reacttime', t-experiment_response.tStart)
      End Routine:
        correct = experiment_pressed and current_num=="7" or not experiment_pressed and current_num!="7"

        thisExp.addData("correct",correct)

        thisExp.addData('experiment_response.enable', experiment_response.tStart)
    TextComponent experiment_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    TextComponent experiment_number
      letterHeight = 0.4
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
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    MouseComponent experiment_response
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.2
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"

        # DATA PREPARE
        import random

        shownum = []
        for i in range(practice_repeats):
            shownum.append(0)

        # ratio of all should be seven
        positive_count = int(practice_positive_examples)

        for i in range(positive_count):
            x = random.randint(0 , practice_repeats-1)
            if shownum[x]== 1 :
                i = i -1;
            else :
                shownum[x] = 1

        for i in range(practice_repeats):
            if shownum[i]==1:
                shownum[i] = "7"
            else:
                num = random.randint(0,9)
                if(num==7):
                    num-=3
                shownum[i] = str(num)
  Routine experiment_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random

        shownum = []
        experiment_examples = experiment_block_nums*experiment_block_trials
        for i in range(experiment_examples):
            shownum.append(0)

        # ratio of all should be seven
        for i in range(experiment_positive_examples):
            x = random.randint(0 , experiment_examples-1)
            if shownum[x]== 1 :
                i = i -1;
            else :
                shownum[x] = 1

        for i in range(experiment_examples):
            if shownum[i]==1:
                shownum[i] = "7"
            else:
                num = random.randint(0,9)
                if(num==7):
                    num-=3
                shownum[i] = str(num)
  Routine practice_prepare_2
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        correct = practice_pressed and shownum[practice_block.thisRepN]=="7" or not practice_pressed and shownum[practice_block.thisRepN]!="7"
        if(correct):
            practice_response_tip.text = "正确"
        else:
          practice_response_tip.text = "错误"

        thisExp.addData("correct",correct)
Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    Routine practice_prepare
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_trial
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  Routine experiment_prepare
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_trial
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
