PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        #创建变量时不需要$，引用时才需要

        # 参数接收模块#bnu
        # 在PsychoPy Builder中测试时注释掉sys.argv并手动输入参数
        RECORD_NAME = sys.argv[1]
        DATA_ROOT = sys.argv[2]
        SUBJECT_NAME = sys.argv[3]
        BLOCK_NUMS = int(sys.argv[4])
        BLOCK_TRIALS = int(sys.argv[5])
        POSITIVE_TRIALS = int(sys.argv[6])

        # 脑电连接模块 #bnu
        import socket
        import tkinter.messagebox
        host = '127.0.0.1'
        goodportary =[]
        portstart = 9230
        for i in range(0,10):
            fg = True
            c=socket.socket(socket.AF_INET,socket.SOCK_STREAM)
            c.settimeout(1.5)
            try:
                c.connect((host,portstart))
            except:
                print('bad port')
                fg = False
            if fg :
                goodportary.append(c)
            portstart = portstart + 1
        if len(goodportary) == 0:
            tkinter.messagebox.showinfo('错误','脑电采集设备未连接')
            core.quit()
        inputData = bytes([0x55,0x01,0x5a,0x07,0x45,0x56,0x45,0x4e,0x54,0x5f,0x41,0xd9])
        mark_fenxin = bytes([0x55,0x01,0x5a,0x01,0x01,0xb2])
        mark_mubiao = bytes([0x55,0x01,0x5a,0x01,0x02,0xb3])
        mark_resrig = bytes([0x55,0x01,0x5a,0x01,0x9a,0x4b])
        mark_reswrg = bytes([0x55,0x01,0x5a,0x01,0x9b,0x4c])
        mark_start = bytes([0x55,0x01,0x5a,0x01,0x51,0x02])
        mark_end = bytes([0x55,0x01,0x5a,0x01,0x52,0x03])

        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n在实验过程中，屏幕中央会呈现一个“＋”\n在“＋”消失后会出现一张图片，请您做如下反应：\n若图片上的动物不是狮子则单击空格键\n若是狮子则不进行任何操作\n请在保证正确的前提下尽快进行反应\n明白实验后按空格键进行练习。"
        practice_confirm_text = "练习已结束，\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "实验结束，感谢参与\n按空格退出"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"
        experiment_block_idx = 1

        image_root = "./img/"

        # PRACTICE CONFIG
        practice_repeats = 8
        practice_positive_examples = 3

        # EXPERIMENT CONFIG
        experiment_block_nums = BLOCK_NUMS#bnu
        experiment_block_trials = BLOCK_TRIALS#bnu
        experiment_positive_examples = POSITIVE_TRIALS#bnu
        experiment_idx = 0
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        #bnu
        for c in goodportary:
            try:
                c.send(mark_end)
            except:
                tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                core.quit()



        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"
        practice_pressed = False

        # UPDATE IMAGE
        current_num = shownum[practice_block.thisRepN]
        practice_image.image = image_root+current_num+".png"


        thisExp.addData('showimage', current_num)
      Each Frame:
        if(practice_pressed==False and practice_response.status==STARTED and len(practice_response.keys)>0):
            practice_pressed = True
            thisExp.addData('practice_response.pressed', 1)
            thisExp.addData('practice_response.reacttime', t-practice_response.tStart)

        #bnu
        if practice_image.status == NOT_STARTED and tThisFlip >= 0.8-frameTolerance:
            if shownum[i] != "7" :
                for c in goodportary:
                    try:
                        c.send(mark_mubiao)
                    except:
                        tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                        core.quit()
            else:
                for c in goodportary:
                    try:
                        c.send(mark_fenxin)
                    except:
                        tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                        core.quit()
      End Routine:
        thisExp.addData('practice_response.enable', practice_response.tStart)
    TextComponent practice_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    ImageComponent practice_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
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    KeyboardComponent practice_response
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.2
      store = nothing
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment"
        experiment_pressed = False

        # UPDATE TEXT
        current_num = shownum[experiment_idx]
        experiment_image.image = image_root+current_num+".png"


        experiment_idx+=1
        thisExp.addData("index",experiment_idx)
        thisExp.addData("showimage",current_num)
      Each Frame:
        if(experiment_pressed==False and experiment_response.status==STARTED and len(experiment_resposne.keys)>0):
            experiment_pressed = True
            thisExp.addData('experiment_response.pressed', 1)
            thisExp.addData('experiment_response.reacttime', t-experiment_response.tStart)

        # bnu
        if experiment_image.status == NOT_STARTED and tThisFlip >= 0.8-frameTolerance:
            if shownum[i] != "7" :
                for c in goodportary:
                    try:
                        c.send(mark_mubiao)
                    except:
                        tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                        core.quit()
            else:
                for c in goodportary:
                    try:
                        c.send(mark_fenxin)
                    except:
                        tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                        core.quit()
      End Routine:
        correct = experiment_pressed and current_num!="7" or not experiment_pressed and current_num=="7"

        #bnu
        if correct:
            for c in goodportary:
                try:
                    c.send(mark_resrig)
                except:
                    tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                    core.quit()
        else:
            for c in goodportary:
                try:
                    c.send(mark_reswrg)
                except:
                    tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                    core.quit()

        thisExp.addData("correct",correct)

        thisExp.addData('experiment_response.enable', experiment_response.tStart)
    TextComponent experiment_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    ImageComponent experiment_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
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    KeyboardComponent experiment_response
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.2
      store = nothing
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"

        # DATA PREPARE
        import random

        shownum = []
        for i in range(practice_repeats):
            shownum.append(0)

        # ratio of all should be seven
        positive_count = int(practice_positive_examples)

        for i in range(positive_count):
            x = random.randint(0 , practice_repeats-1)
            if shownum[x]== 1 :
                i = i -1;
            else :
                shownum[x] = 1

        for i in range(practice_repeats):
            if shownum[i]==1:
                shownum[i] = "7"
            else:
                num = random.randint(0,9)
                if(num==7):
                    num-=3
                shownum[i] = str(num)
      End Routine:
        for c in goodportary:#bnu
            try:
                c.send(mark_start)
            except:
                tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                core.quit()
  Routine experiment_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        for c in goodportary:#bnu
            try:
                c.send(mark_end)
            except:
                tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                core.quit()

        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random

        shownum = []
        experiment_examples = experiment_block_nums*experiment_block_trials
        for i in range(experiment_examples):
            shownum.append(0)

        # ratio of all should be seven
        for i in range(experiment_positive_examples):
            x = random.randint(0 , experiment_examples-1)
            if shownum[x]== 1 :
                i = i -1;
            else :
                shownum[x] = 1

        for i in range(experiment_examples):
            if shownum[i]==1:
                shownum[i] = "7"
            else:
                num = random.randint(0,9)
                if(num==7):
                    num-=3
                shownum[i] = str(num)
      End Routine:
        for c in goodportary:#bnu
            try:
                c.send(mark_start)
            except:
                tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                core.quit()
  Routine practice_prepare_2
  Routine practice_feedback
    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        correct = practice_pressed and shownum[practice_block.thisRepN]!="7" or not practice_pressed and shownum[practice_block.thisRepN]=="7"

        if(correct):
            practice_response_tip.text = "正确"
        else:
          practice_response_tip.text = "错误"

        #bnu
        if correct:
            for c in goodportary:
                try:
                    c.send(mark_resrig)
                except:
                    tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                    core.quit()
        else:
            for c in goodportary:
                try:
                    c.send(mark_reswrg)
                except:
                    tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                    core.quit()



        thisExp.addData("correct",correct)
    TextComponent practice_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    Routine practice_prepare
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_trial
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  Routine experiment_prepare
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_trial
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
