PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import itertools
        #创建变量时不需要$，引用时才需要


        ball_color_default = 'white'
        ball_color_target = 'red'
        ball_radius_range = (5,50)
        ball_player_radius = 20
        ball_velocity_range = (1,5)
        ball_total_count = 10
        balls = []


        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n每次实验中会有若干小球四处滚动\n红色小球跟随鼠标移动，坚持尽可能长的时间\n明白后按空格进入练习"
        practice_confirm_text = "练习已结束\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "难度即将提升，请休息一下\n稍后可按空格继续。"
        experiment_end_text = "试验结束，感谢参与\n按空格退出"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"

        # PRACTICE CONFIG
        practice_repeats = 1


        level_total = 8
        level_current = 1

        def set_level(level_id):
            global ball_total_count
            ball_total_count = level_id*2 + 8

        SCREEN_BOUNDARY = (
            700,#psychopy.visual.window.size[0]/2,
            500#psychopy.visual.window.size[1]/2
        )

        # EXPERIMENT CONFIG
        experiment_block_nums = level_total
        experiment_block_trials = 1
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"

        class Ball:

            def __init__(self,radius,position=(0,0),velocity=(0,0),color=ball_color_default):
                self.radius = radius
                self.position = position
                self.color = color
                self.shape = visual.ShapeStim(
                    win=win, name='ball',units='pix',
                    size=(radius*2, radius*2), vertices='circle',
                    ori=0.0, pos=position, anchor='center',
                    lineWidth=1.0,     colorSpace='rgb',  lineColor=color, fillColor=color,
                    opacity=None, depth=-1.0, interpolate=True)
                self.velocity = velocity
                self.show()
                self.selected = False

            def show(self):
                self.shape.setAutoDraw(True)

            def hide(self):
                self.shape.setAutoDraw(False)

            def setColor(self,color):
                self.color = color
                self.shape.lineColor = color
                self.shape.fillColor = color

            def click(self):
                self.selected = not self.selected
                if(self.selected):
                    self.setColor(ball_color_target)
                else:
                    self.setColor(ball_color_default)

            def updateMotion(self,velocity=None):
                if(velocity is not None):
                    self.velocity = velocity

                pos = (self.position[0]+self.velocity[0],self.position[1]+self.velocity[1])
                self.position = pos
                self.shape.pos = pos

            def updateCollision(self,boundary):#half_width   half_height
                if(self.position[0] + self.radius >= boundary[0] or self.position[0] - self.radius <= -boundary[0]):
                    self.velocity = (-self.velocity[0],self.velocity[1])

                if(self.position[1] + self.radius >= boundary[1] or self.position[1] - self.radius <= -boundary[1]):
                    self.velocity = (self.velocity[0],-self.velocity[1])

        import random
        def rand_pos(half_width,half_height,self_radius,player_radius):
            x = random.randint(-half_width+self_radius,half_width-self_radius)
            while(x>-player_radius and x<player_radius):
                x = random.randint(-half_width+self_radius,half_width-self_radius)
            y = random.randint(-half_height+self_radius,half_height-self_radius)
            while(y>-player_radius and y<player_radius):
                y = random.randint(-half_height+self_radius,half_height-self_radius)
            return (x,y)

        def rand_velocity(min_vel,max_vel):
            x = random.randint(-max_vel,max_vel)
            while(x>-min_vel and x<min_vel):
                x = random.randint(-max_vel,max_vel)
            y = random.randint(-max_vel,max_vel)
            while(y>-min_vel and y<min_vel):
                y = random.randint(-max_vel,max_vel)
            return (x,y)

        def generate_balls(n,radius_range,color,boundary,max_velocity):
            balls = []
            for i in range(n):
                radius = random.randint(radius_range[0],radius_range[1])
                pos = rand_pos(boundary[0],boundary[1],radius,ball_player_radius)
                vel = rand_velocity(ball_velocity_range[0],ball_velocity_range[1])
                balls.append(Ball(radius,pos,vel,color))

            return balls

        def random_select(targets,n):
            sampler = random.sample(range(len(targets)),n)
            got = []
            for i in sampler:
                got.append(targets[i])
            return got



        def update_balls(targets):
            for ball in targets:
                ball.updateCollision(SCREEN_BOUNDARY)
                ball.updateMotion()

        def set_colors(targets,color):
            for ball in targets:
                ball.setColor(color)

        def show_balls(targets):
            for ball in targets:
                ball.show()

        from math import sqrt
        def check_collision(player,balls):
            for ball in balls:
                min_distance = player.radius+ball.radius
                temp = (player.position[0]-ball.position[0])**2 + (player.position[1]-ball.position[1])**2
                if(sqrt(temp)<min_distance):
                    print(player.radius)
                    print(ball.radius)
                    print(min_distance)

                    print(player.position)
                    print(ball.position)
                    print(sqrt(temp))
                    return True
            return False


        def hide_balls(targets):
            for ball in targets:
                ball.hide()
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        balls = generate_balls(ball_total_count,ball_radius_range,ball_color_default,SCREEN_BOUNDARY,ball_velocity_range)
        show_balls(balls)

        player = Ball(ball_player_radius,color=ball_color_target)

        # 鼠标居中
        mouse = event.Mouse(win = win, visible = True, newPos = [0,0])


        player_duration = 0
      Each Frame:
        update_balls(balls)

        # 跟随鼠标
        pos = layout.Position(mouse.getPos(),win.units,win).pix
        if(pos[0]<-SCREEN_BOUNDARY[0]+player.radius):
            pos[0] = -SCREEN_BOUNDARY[0]+player.radius
        elif(pos[0]>SCREEN_BOUNDARY[0]-player.radius):
            pos[0] = SCREEN_BOUNDARY[0]-player.radius
        if(pos[1]<-SCREEN_BOUNDARY[1]+player.radius):
            pos[1] = -SCREEN_BOUNDARY[1]+player.radius
        elif(pos[1]>SCREEN_BOUNDARY[1]-player.radius):
            pos[1] = SCREEN_BOUNDARY[1]-player.radius
        player.position = pos
        player.updateMotion()

        if(check_collision(player,balls)):
            continueRoutine = False
            player_duration = round(t - practice_recorder.tStart,2)
      End Routine:
        hide_balls(balls)
        player.hide()
    TextComponent practice_recorder
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
        experiment_trial_idx = 1
        level_current += 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"

        # DATA PREPARE
        import random

        set_level(level_current)
  Routine practice_prepare_2
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        practice_response_tip.text = str(player_duration)+" s"
  Routine experiment_prepare_2
  Routine level_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"



        set_level(level_current)
  Routine experiment_prepare
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random

        level_current = 1
        experiment_trial_idx = 1
        experiment_block_idx = 1
  Routine practice_target
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"
      End Routine:
        set_colors(targets,ball_color_default)
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $show_duration
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  Routine experiment_target
    TextComponent experiment_recorder
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment"


        balls = generate_balls(ball_total_count,ball_radius_range,ball_color_default,SCREEN_BOUNDARY,ball_velocity_range)
        show_balls(balls)

        player = Ball(ball_player_radius,color=ball_color_target)

        # 鼠标居中
        mouse = event.Mouse(win = win, visible = True, newPos = [0,0])


        player_duration = 0
      Each Frame:
        update_balls(balls)

        # 跟随鼠标
        pos = layout.Position(mouse.getPos(),win.units,win).pix
        if(pos[0]<-SCREEN_BOUNDARY[0]+player.radius):
            pos[0] = -SCREEN_BOUNDARY[0]+player.radius
        elif(pos[0]>SCREEN_BOUNDARY[0]-player.radius):
            pos[0] = SCREEN_BOUNDARY[0]-player.radius
        if(pos[1]<-SCREEN_BOUNDARY[1]+player.radius):
            pos[1] = -SCREEN_BOUNDARY[1]+player.radius
        elif(pos[1]>SCREEN_BOUNDARY[1]-player.radius):
            pos[1] = SCREEN_BOUNDARY[1]-player.radius
        player.position = pos
        player.updateMotion()

        if(check_collision(player,balls)):
            continueRoutine = False
            player_duration = round(t - practice_recorder.tStart,2)
            record(experiment_block_idx,experiment_trial_idx,"Duration",player_duration)
      End Routine:
        record(experiment_block_idx,experiment_trial_idx,"Level_Id",level_current)
        record(experiment_block_idx,experiment_trial_idx,"Level_BallCount",ball_total_count)

        hide_balls(balls)
        player.hide()
  Routine practice_play
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $play_duration
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    CodeComponent code_9
      Code Type = Auto->JS
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      Each Frame:
        update_balls(balls)
  Routine experiment_play
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $play_duration
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    CodeComponent code_10
      Code Type = Auto->JS
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      Each Frame:
        update_balls(balls)
  Routine experiment_feedback
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        experiment_response_tip.text = str(player_duration)+" s"
    TextComponent experiment_response_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine experiment_prepare_3
Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    Routine practice_prepare
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_trial
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  Routine experiment_prepare
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    Routine level_prepare
    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_target
      Routine experiment_feedback
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
