PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        #创建变量时不需要$，引用时才需要


        # 逻辑判断
        def judge(input_key,current_target,current_order):
            if(input_key=="right"):
                return current_target == current_order[0]
            elif(input_key=="down"):
                return current_target == current_order[1]
            elif(input_key=="left"):
                return current_target == current_order[2]
            elif(input_key=="up"):
                return current_target == current_order[3]
            else:
                return False

        pos_mapping = ["right","down","left","up"]

        # 全排列，用来保证四张图是随机放置
        from itertools import permutations
        image_orders = list(permutations(['0','1','2','3'],4))
        orders_count = len(image_orders)

        image_root = "./assets/image_discrimination"
        image_id_min = 1
        image_id_max = 15

        duration_time = 30

        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n在实验过程中，屏幕中央会呈现一个“＋”\n在“＋”消失后会出现五张图片，请做如下反应：\n中央为原始图片，按方向键选择相同图片\n请在保证正确的前提下尽快进行反应\n明白实验后按空格键进入练习。"
        practice_confirm_text = "练习已结束\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "试验结束，感谢参与\n按空格退出"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"

        # PRACTICE CONFIG
        practice_repeats = 2

        # EXPERIMENT CONFIG
        experiment_block_nums = 4
        experiment_block_trials = 10
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"
        practice_pressed = False
        practice_answer = None

        # UPDATE IMAGE
        group_name = str(practice_group_id[experiment_idx])
        current_target = str(practice_target_id[experiment_idx])
        current_order = image_orders[practice_order_id[experiment_idx]]


        practice_right.image = image_root+"/"+group_name+"-"+current_order[0]+".png"
        practice_down.image = image_root+"/"+group_name+"-"+current_order[1]+".png"
        practice_left.image = image_root+"/"+group_name+"-"+current_order[2]+".png"
        practice_up.image = image_root+"/"+group_name+"-"+current_order[3]+".png"

        practice_center.image = image_root+"/"+group_name+"-"+current_target+".png"
      Each Frame:
        if(practice_pressed==False and practice_response.status==STARTED and len(practice_response.keys)>0):
            practice_pressed = True
            practice_answer = practice_response.keys
            continueRoutine = False
    TextComponent practice_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    ImageComponent practice_center
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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    ImageComponent practice_up
      anchor = bottom-center
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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    ImageComponent practice_down
      anchor = top-center
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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    ImageComponent practice_left
      anchor = center-right
      pos = (-0.2, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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    ImageComponent practice_right
      anchor = center-left
      pos = (0.2, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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    KeyboardComponent practice_response
      allowedKeys = 'up','down','left','right'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
      store = nothing
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment"
        experiment_pressed = False
        experiment_answer = None

        # UPDATE IMAGE
        group_name = str(experiment_group_id[experiment_idx])
        current_target = str(experiment_target_id[experiment_idx])
        current_order = image_orders[experiment_order_id[experiment_idx]]


        experiment_right.image = image_root+"/"+group_name+"-"+current_order[0]+".png"
        experiment_down.image = image_root+"/"+group_name+"-"+current_order[1]+".png"
        experiment_left.image = image_root+"/"+group_name+"-"+current_order[2]+".png"
        experiment_up.image = image_root+"/"+group_name+"-"+current_order[3]+".png"

        experiment_center.image = image_root+"/"+group_name+"-"+current_target+".png"

        record(experiment_block_idx,experiment_trial_idx,"ImageGroup",group_name)
        record(experiment_block_idx,experiment_trial_idx,"CenterImage",current_target)
        for i in range(0,4):
            if(current_order[i]==current_target):
                record(experiment_block_idx,experiment_trial_idx,"CorrectPos",pos_mapping[i])
      Each Frame:
        if(experiment_pressed==False and experiment_response.status==STARTED and len(experiment_response.keys)>0):
            experiment_pressed = True
            experiment_answer = experiment_response.keys

            record(experiment_block_idx,experiment_trial_idx,"ReactTime",t-experiment_response.tStart)
            record(experiment_block_idx,experiment_trial_idx,"AnswerPos",experiment_answer)

            continueRoutine = False
      End Routine:
        correct = judge(experiment_answer,current_target,current_order)

        record(experiment_block_idx,experiment_trial_idx,"Correct",correct)





        experiment_trial_idx += 1
        experiment_idx += 1
    TextComponent experiment_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    KeyboardComponent experiment_response
      allowedKeys = 'up','down','left','right'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
      store = nothing
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    ImageComponent experiment_up
      anchor = bottom-center
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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    ImageComponent experiment_down
      anchor = top-center
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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    ImageComponent experiment_left
      anchor = center-right
      pos = (-0.2, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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    ImageComponent experiment_right
      anchor = center-left
      pos = (0.2, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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    ImageComponent experiment_center
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration_time
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
        experiment_trial_idx = 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"

        # DATA PREPARE
        import random
        experiment_idx = 0

        practice_group_id = []
        practice_target_id = []
        practice_order_id = []
        for i in range(practice_repeats):
            practice_group_id.append(
                random.randint(image_id_min,image_id_max)
            )
            practice_target_id.append(
                random.randint(0,3)
            )
            practice_order_id.append(
                random.randint(0,orders_count-1)
            )
  Routine experiment_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random

        experiment_trial_idx = 1
        experiment_block_idx = 1
        experiment_idx = 0

        experiment_group_id = []
        experiment_target_id = []
        experiment_order_id = []
        for i in range(experiment_block_nums*experiment_block_trials):
            experiment_group_id.append(
                random.randint(image_id_min,image_id_max)
            )
            experiment_target_id.append(
                random.randint(0,3)
            )
            experiment_order_id.append(
                random.randint(0,orders_count-1)
            )
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        correct = judge(practice_answer,current_target,current_order)

        if(correct):
            practice_response_tip.text = "正确"
        else:
            practice_response_tip.text = "错误"

        experiment_idx += 1
Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    Routine practice_prepare
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_trial
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  Routine experiment_prepare
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_trial
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
