PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        #创建变量时不需要$，引用时才需要


        level_total = 6
        current_level = 1
        level_images = 6
        degree_divider = 360 / level_images
        tip_duration = 10
        image_duration = 5

        image_root = "./assets/image_mirror"
        def get_img_name(level,idx,is_mirrored):# idx从0开始
            name = str(level).zfill(2)+"-"+str(int(idx*degree_divider))
            if(is_mirrored):
                name += "-m"
            return name

        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n每段实验开始时，屏幕左侧呈现原图、右侧呈现镜像\n随后会呈现数张旋转后的图片，请做如下反应：\n若由原图旋转所得，请按“F”\n若由镜像旋转所得，请按“J”\n明白后按空格进入练习"
        practice_confirm_text = "练习已结束\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "下一阶段难度将会提升\n请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "试验结束，感谢参与\n按空格退出"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"

        # PRACTICE CONFIG
        practice_repeats = 4

        # EXPERIMENT CONFIG
        experiment_block_nums = level_total
        experiment_block_trials = 12
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"
        practice_pressed = False
        practice_answer = None

        # UPDATE TEXT
        current_num = shownum[experiment_idx]
        current_mirror = is_mirror[experiment_idx]

        practice_image.image = image_root+"/"+get_img_name(current_level,current_num,current_mirror)+".jpg"
      Each Frame:
        if(practice_pressed==False and practice_response.status==STARTED and len(practice_response.keys)>0):
            practice_pressed = True
            practice_answer = practice_response.keys[0]
            continueRoutine = False
    ImageComponent practice_image
      saveStartStop = False
      size = (500, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
      units = pix
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    KeyboardComponent practice_response
      allowedKeys = 'f','j'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
      store = nothing
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment"
        experiment_pressed = False
        experiment_answer = None

        # UPDATE TEXT
        current_num = shownum[experiment_idx]
        current_mirror = is_mirror[experiment_idx]



        experiment_image.image = image_root+"/"+get_img_name(current_level,current_num,current_mirror)+".jpg"

        record(experiment_block_idx,experiment_trial_idx,"Level_Id",current_level)
        record(experiment_block_idx,experiment_trial_idx,"CurrentImage",current_num)
        record(experiment_block_idx,experiment_trial_idx,"IsMirror",current_mirror)
      Each Frame:
        if(experiment_pressed==False and experiment_response.status==STARTED and len(experiment_response.keys)>0):
            experiment_pressed = True
            experiment_answer = practice_response.keys[0]
            record(experiment_block_idx,experiment_trial_idx,"ReactTime",t-experiment_response.tStart)
            continueRoutine = False
      End Routine:
        correct = experiment_pressed and (current_mirror==0 and experiment_answer=='f' or current_mirror==1 and experiment_answer=='j')

        record(experiment_block_idx,experiment_trial_idx,"Answer",experiment_response.keys[0])
        record(experiment_block_idx,experiment_trial_idx,"Correct",correct)



        experiment_trial_idx += 1
        experiment_idx += 1
    ImageComponent experiment_image
      saveStartStop = False
      size = (500, 500)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $image_duration
      units = pix
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    KeyboardComponent experiment_response
      allowedKeys = 'f','j'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = $image_duration
      store = nothing
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
        experiment_trial_idx = 1
        current_level += 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"

        # DATA PREPARE
        import random
        experiment_idx = 0

        is_mirror = []
        shownum = []
        for i in range(practice_repeats):
            is_mirror.append(
                random.randint(0,1)
            )
            shownum.append(
                random.randint(0,level_images-1)
            )

        image_raw.image = image_root+"/"+get_img_name(current_level,0,False)+".jpg"
        image_mirror.image = image_root+"/"+get_img_name(current_level,0,True)+".jpg"
    ImageComponent image_raw
      anchor = top-right
      pos = (-10, 20)
      saveStartStop = False
      size = (500, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      units = pix
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    ImageComponent image_mirror
      anchor = top-left
      pos = (10, 20)
      saveStartStop = False
      size = (500, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      units = pix
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    KeyboardComponent tip_skipper
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      store = nothing
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    TextComponent tip_normal
      letterHeight = 0.05
      pos = (-0.25, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      text = 原始图片
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    TextComponent tip_mirror
      letterHeight = 0.05
      pos = (0.25, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 镜像图片
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  Routine practice_prepare_2
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        correct = practice_pressed and (current_mirror==0 and practice_answer=='f' or current_mirror==1 and practice_answer=='j')
        if(correct):
            practice_response_tip.text = "正确"
        else:
            practice_response_tip.text = "错误"

        experiment_idx += 1
  Routine experiment_prepare_2
  Routine level_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        experiment_image_raw.image = image_root+"/"+get_img_name(current_level,0,False)+".jpg"
        experiment_image_mirror.image = image_root+"/"+get_img_name(current_level,0,True)+".jpg"
    ImageComponent experiment_image_raw
      anchor = top-right
      pos = (-10, 20)
      saveStartStop = False
      size = (500, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      units = pix
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    ImageComponent experiment_image_mirror
      anchor = top-left
      pos = (10, 20)
      saveStartStop = False
      size = (500, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      units = pix
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    KeyboardComponent experiment_tip_skipper
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      store = nothing
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    TextComponent experiment_tip_normal
      letterHeight = 0.05
      pos = (-0.25, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      text = 原始图片
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    TextComponent experiment_tip_mirror
      letterHeight = 0.05
      pos = (0.25,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      text = 镜像图片
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  Routine experiment_prepare
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random


        current_level = 1
        experiment_trial_idx = 1
        experiment_block_idx = 1
        experiment_idx = 0


        is_mirror = []
        shownum = []
        for l in range(experiment_block_nums):
            for j in range(experiment_block_trials):
                shownum.append(
                    random.randint(0,level_images-1)
                )
                is_mirror.append(
                    random.randint(0,1)
                )
Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    Routine practice_prepare
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_trial
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  Routine experiment_prepare
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    Routine level_prepare
    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_trial
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
