PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        #创建变量时不需要$，引用时才需要


        image_id_from = 1
        image_id_to = 10



        materials = [
            {
                "id":1,
                "tip_size":(600,400),
                "target_size":(100,60),
                "target_ori":-45,
                "target_pos":(250,-150),
                "background_size":(1000,1000)
            },
            {
                "id":2,
                "tip_size":(600,600),
                "target_size":(150,150),
                "target_ori":0,
                "target_pos":(-400,-250),
                "background_size":(1000,1000)
            },
            {
                "id":3,
                "tip_size":(600,600),
                "target_size":(100,100),
                "target_ori":0,
                "target_pos":(-300,-260),
                "background_size":(1000,1000)
            },
            {
                "id":4,
                "tip_size":(800,400),
                "target_size":(250,250),
                "target_ori":0,
                "target_pos":(260,-100),
                "background_size":(1000,1000)
            },
            {
                "id":5,
                "tip_size":(600,600),
                "target_size":(200,200),
                "target_ori":0,
                "target_pos":(-230,-260),
                "background_size":(1000,1000)
            },
            {
                "id":6,
                "tip_size":(600,600),
                "target_size":(100,100),
                "target_ori":0,
                "target_pos":(250,-200),
                "background_size":(1000,1000)
            },
            {
                "id":7,
                "tip_size":(800,600),
                "target_size":(100,100),
                "target_ori":0,
                "target_pos":(260,-250),
                "background_size":(1000,1000)
            },
            {
                "id":8,
                "tip_size":(800,600),
                "target_size":(170,170),
                "target_ori":0,
                "target_pos":(50,-400),
                "background_size":(1000,1000)
            },
            {
                "id":9,
                "tip_size":(800,600),
                "target_size":(140,100),
                "target_ori":0,
                "target_pos":(330,30),
                "background_size":(1000,1000)
            },
            {
                "id":10,
                "tip_size":(600,800),
                "target_size":(100,100),
                "target_ori":0,
                "target_pos":(-20,200),
                "background_size":(1000,1000)
            }
        ]


        tip_duration = 1
        select_duration = 5

        image_root = "./assets/image_search"
        def get_background(bg_id):
            return image_root+"/backgrounds/bg_"+str(bg_id)+".png"

        def get_target(target_id):
            return image_root+"/targets/t_"+str(target_id)+".png"


        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n每段实验开始时，将会呈现一张目标图像\n随后目标图像将隐藏在背景图像中\n在场景中寻找目标图像、鼠标点击选择\n明白后按空格进入练习"
        practice_confirm_text = "练习已结束\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "下一阶段难度将会提升\n请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "试验结束，感谢参与\n按空格退出"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"

        # PRACTICE CONFIG
        practice_repeats = 1

        # EXPERIMENT CONFIG
        experiment_block_nums = 1
        experiment_block_trials = 10
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"

        react_time = None

        practice_bg_image.image = bg_image
        practice_target_image.image = target_image

        practice_bg_image.size = practice_test["background_size"]
        practice_target_image.size = practice_test["target_size"]
        practice_target_image.pos = practice_test["target_pos"]
        practice_target_image.ori = practice_test["target_ori"]
      Each Frame:
        if(practice_mouse.isPressedIn(practice_target_image)):
            react_time = round(t - practice_mouse.tStart,2)
            continueRoutine = False
      End Routine:
        if(react_time==None):
            react_time = "???"
    ImageComponent practice_bg_image
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $select_duration
      units = pix
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    MouseComponent practice_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $select_duration
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    ImageComponent practice_target_image
      saveStartStop = False
      size = (500, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $select_duration
      units = pix
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment"

        react_time = None

        experiment_bg_image.image = bg_image
        experiment_target_image.image = target_image

        experiment_bg_image.size = experiment_test["background_size"]
        experiment_target_image.size = experiment_test["target_size"]
        experiment_target_image.pos = experiment_test["target_pos"]
        experiment_target_image.ori = experiment_test["target_ori"]
      Each Frame:
        if(experiment_mouse.isPressedIn(experiment_target_image)):
            react_time = round(t - experiment_mouse.tStart,2)
            record(experiment_block_idx,experiment_trial_idx,"ReactTime",react_time)
            continueRoutine = False
      End Routine:
        experiment_trial_idx += 1
        experiment_idx += 1
    ImageComponent experiment_bg_image
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $select_duration
      units = pix
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    ImageComponent experiment_target_image
      saveStartStop = False
      size = (500, 500)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $select_duration
      units = pix
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    MouseComponent experiment_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $select_duration
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
        experiment_trial_idx = 1
        current_level += 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"

        # DATA PREPARE
        import random
        experiment_idx = 0

        practice_tests = random.sample(materials,practice_repeats)
  Routine practice_prepare_2
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        practice_response_tip.text = str(react_time)+" s"




        experiment_idx += 1
  Routine experiment_prepare_2
  Routine level_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"
  Routine experiment_prepare
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random


        experiment_trial_idx = 1
        experiment_block_idx = 1
        experiment_idx = 0


        experiment_tests = random.sample(materials,experiment_block_nums*experiment_block_trials)
  Routine practice_tip
    ImageComponent practice_tip_target
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      units = pix
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        practice_test = practice_tests[experiment_idx]


        target_image = get_target(practice_test["id"])
        bg_image = get_background(practice_test["id"])

        practice_tip_target.image = target_image
        practice_tip_target.size = practice_test["tip_size"]
  Routine experiment_tip
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        experiment_test = experiment_tests[experiment_idx]


        target_image = get_target(experiment_test["id"])
        bg_image = get_background(experiment_test["id"])

        experiment_tip_target.image = target_image
        experiment_tip_target.size = experiment_test["tip_size"]

        record(experiment_block_idx,experiment_trial_idx,"Stimulus_Id",react_time)
    ImageComponent experiment_tip_target
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tip_duration
      units = pix
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Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    Routine practice_prepare
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_tip
      Routine practice_trial
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  Routine experiment_prepare
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_tip
      Routine experiment_trial
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
