PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        #创建变量时不需要$，引用时才需要


        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n在实验过程中，屏幕中央会出现一个注视点“+”\n随后屏幕上将快速呈现一系列数字与字母\n请记住其出现顺序，随后逐个输入并按空格提交\n明白后按空格开始练习。"
        practice_confirm_text = "练习已结束\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "试验结束，感谢参与\n按空格退出"

        practice_answer_tip_text = "请按键作答(退格删除 空格提交)"
        experiment_answer_tip_text = "请按键作答"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"

        # PRACTICE CONFIG
        practice_repeats = 3

        # EXPERIMENT CONFIG
        experiment_block_nums = 3
        experiment_block_trials = 8


        sequence_length = 6
        char_duration = 0.5
        blank_duration = 0.2

        import random
        charset = ['0','1','2','3','4','5','6','7','8','9','a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z']
        charset_length = len(charset)

        def generate_sequence(length):
            seq = []
            for i in range(length):
                seq.append(
                    charset[random.randint(0,charset_length-1)]# python的randint不是左闭右开
                )
            return seq
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"

        # UPDATE TEXT
        practice_seq = generate_sequence(sequence_length)



        last_char = -1
        last_blank = -1
      Each Frame:
        if practice_char.status == STARTED:

            period_t = (t - practice_char.tStart)%(char_duration+blank_duration)
            period_i = int((t - practice_char.tStart)/(char_duration+blank_duration))

            if( period_i >= sequence_length):
                continueRoutine = False
            elif( period_i!=last_char and period_t < char_duration ):
                practice_char.text = practice_seq[period_i]
                last_char = period_i
            elif( period_i!=last_blank and period_t >=char_duration ):
                practice_char.text = ""
                last_blank = period_i
    TextComponent practice_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent practice_char
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.2
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        experiment_idx = 0
        experiment_block_idx = 1
        experiment_trial_idx = 1
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment"

        # UPDATE TEXT
        experiment_seq = generate_sequence(sequence_length)

        record(experiment_block_idx,experiment_trial_idx,"Sequence",experiment_seq)

        last_char = -1
        last_blank = -1
      Each Frame:
        if experiment_char.status == STARTED:

            period_t = (t - experiment_char.tStart)%(char_duration+blank_duration)
            period_i = int((t - experiment_char.tStart)/(char_duration+blank_duration))

            if( period_i >= sequence_length):
                continueRoutine = False
            elif( period_i!=last_char and period_t < char_duration ):
                experiment_char.text = experiment_seq[period_i]
                last_char = period_i
            elif( period_i!=last_blank and period_t >=char_duration ):
                experiment_char.text = ""
                last_blank = period_i
    TextComponent experiment_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent experiment_char
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.2
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
        experiment_trial_idx = 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"
  Routine experiment_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random

        shownum = []
        experiment_examples = experiment_block_nums*experiment_block_trials
        for i in range(experiment_examples):
            shownum.append(0)

        # ratio of all should be seven
        positive_count = int(experiment_examples*experiment_positive_ratio)

        for i in range(positive_count):
            x = random.randint(0 , experiment_examples-1)
            if shownum[x]== 1 :
                i = i -1;
            else :
                shownum[x] = 1

        for i in range(experiment_examples):
            if shownum[i]==1:
                shownum[i] = "7"
            else:
                num = random.randint(0,9)
                if(num==7):
                    num-=3
                shownum[i] = str(num)
  Routine practice_prepare_2
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        corrent = confirmed and answer==practice_seq
        if(corrent):
            practice_response_tip.text = "正确"
        else:
            practice_response_tip.text = "错误"
  Routine practice_feedback_2
  Routine practice_answer
    TextComponent practice_input
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # 必须要空格提交才算有效回答
        confirmed = False

        answer = []

        inputset = ['backspace','space',*charset]

        event.clearEvents()

        practice_input.text = practice_answer_tip_text
      Each Frame:
        inputs = event.getKeys(inputset)
        if(len(inputs)>0):

            if(inputs[0]=="backspace"):
                if(len(answer)>0):
                    answer.pop()
                practice_input.text = ''.join(answer)
            elif(inputs[0]=="space"):
                confirmed = True
                continueRoutine = False
            else:
                answer.append(inputs[0])
                practice_input.text = ''.join(answer)
  Routine experiment_answer
    TextComponent experiment_input
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        # 必须要空格提交才算有效回答
        confirmed = False

        answer = []

        inputset = ['backspace','space',*charset]

        event.clearEvents()

        experiment_input.text = experiment_answer_tip_text
      Each Frame:
        inputs = event.getKeys(inputset)
        if(len(inputs)>0):

            if(inputs[0]=="backspace"):
                if(len(answer)>0):
                    answer.pop()
                experiment_input.text = ''.join(answer)
            elif(inputs[0]=="space"):
                confirmed = True
                continueRoutine = False
            else:
                answer.append(inputs[0])
                experiment_input.text = ''.join(answer)
      End Routine:
        correct = confirmed and answer==experiment_seq

        record(experiment_block_idx,experiment_trial_idx,"Correct",correct)
        record(experiment_block_idx,experiment_trial_idx,"Submit",confirmed)
        record(experiment_block_idx,experiment_trial_idx,"Answer",answer)


        experiment_trial_idx +=1
        experiment_idx += 1
  Routine experiment_feedback
    CodeComponent experiment_judge
      Code Type = Auto->JS
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      Begin Routine:
        corrent = confirmed and answer==practice_seq
        if(corrent):
            practice_response_tip.text = "正确"
        else:
            practice_response_tip.text = "错误"
    TextComponent experiment_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_trial
      Routine practice_answer
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_trial
      Routine experiment_answer
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
