PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import itertools
        #创建变量时不需要$，引用时才需要





        ball_color_default = 'white'
        ball_color_target = 'red'
        ball_radius = 0.01
        ball_max_velocity = 5
        ball_total_count = 10
        ball_target_count = 3
        balls = []


        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n每次实验前会有若干小球被标记为目标，随后标记消失\n实验开始时小球滚动，你需要记忆哪些是目标\n结束后点击选择目标并按空格提交\n选择错误时再次点击可以撤销\n明白后按空格进入练习"
        practice_confirm_text = "练习已结束\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "试验结束，感谢参与\n按空格退出"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"

        # PRACTICE CONFIG
        practice_repeats = 2

        show_duration = 3
        play_duration = 5
        select_duration = 5
        level_total = 8
        level_current = 1

        def set_level(level_id):
            global ball_target_count
            ball_target_count = level_id + 2
            ball_total_count = level_id + 9

        SCREEN_BOUNDARY = (
            700,#psychopy.visual.window.size[0]/2,
            500#psychopy.visual.window.size[1]/2
        )

        # EXPERIMENT CONFIG
        experiment_block_nums = level_total
        experiment_block_trials = 3
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"

        class Ball:

            def __init__(self,radius,position=(0,0),velocity=(0,0),color=ball_color_default):
                self.radius = radius
                self.position = position
                self.color = color
                self.shape = visual.ShapeStim(
                    win=win, name='ball',units='pix',
                    size=(radius*2, radius*2), vertices='circle',
                    ori=0.0, pos=position, anchor='center',
                    lineWidth=1.0,     colorSpace='rgb',  lineColor=color, fillColor=color,
                    opacity=None, depth=-1.0, interpolate=True)
                self.velocity = velocity
                self.show()
                self.selected = False

            def show(self):
                self.shape.setAutoDraw(True)

            def hide(self):
                self.shape.setAutoDraw(False)

            def setColor(self,color):
                self.color = color
                self.shape.lineColor = color
                self.shape.fillColor = color

            def click(self):
                self.selected = not self.selected
                if(self.selected):
                    self.setColor(ball_color_target)
                else:
                    self.setColor(ball_color_default)

            def updateMotion(self,velocity=None):
                if(velocity is not None):
                    self.velocity = velocity

                pos = (self.position[0]+self.velocity[0],self.position[1]+self.velocity[1])
                self.position = pos
                self.shape.pos = pos

            def updateCollision(self,boundary):#half_width   half_height
                if(self.position[0] + self.radius >= boundary[0] or self.position[0] - self.radius <= -boundary[0]):
                    self.velocity = (-self.velocity[0],self.velocity[1])

                if(self.position[1] + self.radius >= boundary[1] or self.position[1] - self.radius <= -boundary[1]):
                    self.velocity = (self.velocity[0],-self.velocity[1])

        import random
        def generate_balls(n,radius,color,boundary,max_velocity):
            balls = []
            for i in range(n):
                pos = (
                    random.randint(-boundary[0]+radius,boundary[0]-radius),
                    random.randint(-boundary[1]+radius,boundary[1]-radius)
                )
                vel = (
                    random.randint(-max_velocity,max_velocity),
                    random.randint(-max_velocity,max_velocity)
                )
                balls.append(Ball(radius,pos,vel,color))

            return balls

        def random_select(targets,n):
            sampler = random.sample(range(len(targets)),n)
            got = []
            for i in sampler:
                got.append(targets[i])
            return got



        def update_balls(targets):
            for ball in targets:
                ball.updateCollision(SCREEN_BOUNDARY)
                ball.updateMotion()

        def set_colors(targets,color):
            for ball in targets:
                ball.setColor(color)

        def show_balls(targets):
            for ball in targets:
                ball.show()


        def hide_balls(targets):
            for ball in targets:
                ball.hide()
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Psychopy不提供mouse release事件
        # 需要自己实现
        selection = None
        answer = set()

        # 必须要空格提交才算有效回答
        confirmed = False
      Each Frame:
        is_pressing = False

        for ball in balls:
            if(practice_mouse.isPressedIn(ball.shape)):
                is_pressing = True
                if(selection is None):
                    ball.click()
                    selection = ball


        if(not is_pressing and selection is not None):#release
            # 不判断is_pressing会出现drag

            if(selection.selected):
                answer.add(selection)
            else:
                answer.remove(selection)
            selection = None

        if(confirmed==False and practice_keyboard.status==STARTED and len(practice_keyboard.keys)>0):
            confirmed = True
            continueRoutine = False
      End Routine:
        set_colors(answer,ball_color_default)
        hide_balls(balls)
    MouseComponent practice_mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      stopVal [duration (s)] = $select_duration
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    KeyboardComponent practice_keyboard
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      stopVal [duration (s)] = $select_duration
      store = nothing
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Psychopy不提供mouse release事件
        # 需要自己实现
        selection = None
        answer = set()

        # 必须要空格提交才算有效回答
        confirmed = False
      Each Frame:
        is_pressing = False

        for ball in balls:
            if(experiment_mouse.isPressedIn(ball.shape)):
                is_pressing = True
                if(selection is None):
                    ball.click()
                    selection = ball


        if(not is_pressing and selection is not None):#release
            # 不判断is_pressing会出现drag

            if(selection.selected):
                answer.add(selection)
            else:
                answer.remove(selection)
            selection = None

        if(confirmed==False and experiment_keyboard.status==STARTED and len(experiment_keyboard.keys)>0):
            confirmed = True
            continueRoutine = False
            record(experiment_block_idx,experiment_trial_idx,"ReactTime",t-experiment_keyboard.tStart)
      End Routine:
        set_colors(answer,ball_color_default)
        hide_balls(balls)

        correct = confirmed and len(answer-set(targets))==0 and len(set(targets)-answer)==0

        record(experiment_block_idx,experiment_trial_idx,"Correct",correct)
        record(experiment_block_idx,experiment_trial_idx,"Submit",confirmed)
        record(experiment_block_idx,experiment_trial_idx,"Level_Id",level_current)
        record(experiment_block_idx,experiment_trial_idx,"Level_BallCount",ball_total_count)
        record(experiment_block_idx,experiment_trial_idx,"Level_TargetCount",ball_target_count)


        experiment_trial_idx += 1
    KeyboardComponent experiment_keyboard
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $select_duration
      store = nothing
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    MouseComponent experiment_mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $select_duration
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
        experiment_trial_idx = 1
        level_current += 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"

        # DATA PREPARE
        import random

        set_level(level_current)
  Routine practice_prepare_2
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        correct = confirmed and len(answer-set(targets))==0 and len(set(targets)-answer)==0
        if(correct):
            practice_response_tip.text = "正确"
        else:
            practice_response_tip.text = "错误"
  Routine experiment_prepare_2
  Routine level_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"


        set_level(level_current)
  Routine experiment_prepare
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random

        level_current = 1
        experiment_trial_idx = 1
        experiment_block_idx = 1
  Routine practice_target
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"


        balls = generate_balls(ball_total_count,ball_radius,ball_color_default,SCREEN_BOUNDARY,ball_max_velocity)
        show_balls(balls)
        targets = random_select(balls,ball_target_count)
        set_colors(targets,ball_color_target)
      End Routine:
        set_colors(targets,ball_color_default)
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $show_duration
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  Routine experiment_target
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $show_duration
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment"


        balls = generate_balls(ball_total_count,ball_radius,ball_color_default,SCREEN_BOUNDARY,ball_max_velocity)
        show_balls(balls)
        targets = random_select(balls,ball_target_count)
        set_colors(targets,ball_color_target)
      End Routine:
        set_colors(targets,ball_color_default)
  Routine practice_play
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $play_duration
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    CodeComponent code_9
      Code Type = Auto->JS
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      Each Frame:
        update_balls(balls)
  Routine experiment_play
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $play_duration
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    CodeComponent code_10
      Code Type = Auto->JS
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      Each Frame:
        update_balls(balls)
Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    Routine practice_prepare
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_target
      Routine practice_play
      Routine practice_trial
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  Routine experiment_prepare
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    Routine level_prepare
    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_target
      Routine experiment_play
      Routine experiment_trial
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
