PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        #创建变量时不需要$，引用时才需要

        # 参数接收模块  #bnu
        # 在PsychoPy Builder中测试时注释掉sys.argv并手动输入参数
        RECORD_NAME = sys.argv[1]
        DATA_ROOT = sys.argv[2]
        SUBJECT_NAME = sys.argv[3]
        BLOCK_NUMS = int(sys.argv[4])
        BLOCK_TRIALS = int(sys.argv[5])

        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n在实验过程中，屏幕中央会出现一个注视点“＋”\n请保持注意集中，随后屏幕上将快速呈现一系列数字\n请您记住其中的红色数字和绿色数字\n之后按照问题输入对应数字\n按空格开始练习。"
        practice_confirm_text = "练习已结束\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "试验结束，感谢参与\n按空格退出"


        # 脑电连接模块 bnu
        import socket
        import tkinter.messagebox
        host = '127.0.0.1'
        port = 9237
        client = socket.socket(socket.AF_INET,socket.SOCK_STREAM)
        client.settimeout(30)
        try :
            client.connect((host,port))
        except socket.error:
            tkinter.messagebox.showinfo('错误','脑电采集设备未连接')
            core.quit()
        inputData = bytes([0x55,0x01,0x5a,0x07,0x45,0x56,0x45,0x4e,0x54,0x5f,0x41,0xd9])
        mark_resrig = bytes([0x55,0x01,0x5a,0x01,0x9a,0x4b])
        mark_reswrg = bytes([0x55,0x01,0x5a,0x01,0x9b,0x4c])
        mark_firsttarget = bytes([0x55,0x01,0x5a,0x01,0x01,0xB2])
        mark_secondtarget = bytes([0x55,0x01,0x5a,0x01,0x02,0xb3])


        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"
        experiment_block_idx = 1

        # PRACTICE CONFIG
        practice_repeats = 8

        # EXPERIMENT CONFIG
        experiment_block_nums = BLOCK_NUMS#bnu
        experiment_block_trials = BLOCK_TRIALS#bnu
        experiment_idx = 0
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"
        answer_red = None
        answer_green = None

        # UPDATE TEXT
        import random
        practice_number1.text = str(random.randint(0,9))
        practice_number2.text = str(random.randint(0,9))
        practice_number3.text = str(random.randint(0,9))

        number_red = str(random.randint(0,9))
        number_green = str(random.randint(0,9))
        practice_number_red.text = number_red
        practice_number_green.text = number_green


        thisExp.addData("shownum_red",number_red)
        thisExp.addData("shownum_green",number_green)
      Each Frame:
        if(practice_response_red.status==STARTED):
            if(answer_red==None and len(practice_response_red.keys)>0):
                answer_red = practice_response_red.keys[-1]

        if(practice_response_green.status==STARTED):
            if(answer_green==None and len(practice_response_green.keys)>0):
                answer_green = practice_response_green.keys[-1]

        #bnu
        if practice_number_red.status == NOT_STARTED and tThisFlip >= 1.08-frameTolerance:
            client.send(mark_firsttarget)

        #bnu
        if practice_number_green.status == NOT_STARTED and tThisFlip >= 1.24-frameTolerance:
            client.send(mark_secondtarget)
      End Routine:
        thisExp.addData('answer_red', answer_red)
        thisExp.addData('answer_green', answer_green)


        thisExp.addData('correct_red', answer_red==number_red)
        thisExp.addData('correct_green', answer_green==number_green)


        #bnu
        if(answer_red==number_red):
            client.send(mark_resrig)
        else:
            client.send(mark_reswrg)
        if(answer_green==number_green):
            client.send(mark_resrig)
        else:
            client.send(mark_reswrg)
    TextComponent practice_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = practice_number1.status==STARTED
      text = +
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    TextComponent practice_number1
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.08
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    TextComponent practice_number_red
      color = red
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.08
      stopVal [duration (s)] = 0.08
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    TextComponent practice_number2
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.16
      stopVal [duration (s)] = 0.08
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    TextComponent practice_number_green
      color = green
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.24
      stopVal [duration (s)] = 0.08
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    TextComponent practice_number3
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.32
      stopVal [duration (s)] = 0.08
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    TextComponent practice_question_red
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 2
      text = 红色数字是几？
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    TextComponent practice_question_green
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 3.8
      stopVal [duration (s)] = 2
      text = 绿色数字是几？
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    KeyboardComponent practice_response_red
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 2.2
      store = nothing
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    KeyboardComponent practice_response_green
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0''1','2','3','4''5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 3.8
      stopVal [duration (s)] = 2.2
      store = nothing
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        experiment_idx = 0
        experiment_block_idx = 1
        experiment_trial_idx = 1
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment"
        answer_red = None
        answer_green = None

        # UPDATE TEXT
        import random
        experiment_number1.text = str(random.randint(0,9))
        experiment_number2.text = str(random.randint(0,9))
        experiment_number3.text = str(random.randint(0,9))

        number_red = str(random.randint(0,9))
        number_green = str(random.randint(0,9))
        experiment_number_red.text = number_red
        experiment_number_green.text = number_green


        experiment_idx+=1

        record(experiment_block_idx,experiment_trial_idx,"ShowNum_Red",number_red)
        record(experiment_block_idx,experiment_trial_idx,"ShowNum_Green",number_green)
      Each Frame:
        if(experiment_response_red.status==STARTED):
            if(answer_red==None and len(experiment_response_red.keys)>0):
                answer_red = experiment_response_red.keys[-1]

        if(experiment_response_green.status==STARTED):
            if(answer_green==None and len(experiment_response_green.keys)>0):
                answer_green = experiment_response_green.keys[-1]

        # bnu
        if experiment_number_red.status == NOT_STARTED and tThisFlip >= 1.08-frameTolerance:
            client.send(mark_firsttarget)

        # bnu
        if experiment_number_green.status == NOT_STARTED and tThisFlip >= 1.24-frameTolerance:
            client.send(mark_secondtarget)
      End Routine:
        record(experiment_block_idx,experiment_trial_idx,"Answer_Red",answer_red)
        record(experiment_block_idx,experiment_trial_idx,"Answer_Green",answer_green)

        record(experiment_block_idx,experiment_trial_idx,"Correct_Red",answer_red==number_red)
        record(experiment_block_idx,experiment_trial_idx,"Correct_Green",answer_green==number_green)


        #bnu
        if(answer_red==number_red):
            client.send(mark_resrig)
        else:
            client.send(mark_reswrg)
        if(answer_green==number_green):
            client.send(mark_resrig)
        else:
            client.send(mark_reswrg)
    TextComponent experiment_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = experiment_number1.status==STARTED
      text = +
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    TextComponent experiment_number1
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.08
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    TextComponent experiment_number_red
      color = red
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.08
      stopVal [duration (s)] = 0.08
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    TextComponent experiment_number2
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.16
      stopVal [duration (s)] = 0.08
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    TextComponent experiment_number_green
      color = green
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.24
      stopVal [duration (s)] = 0.08
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    TextComponent experiment_number3
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.32
      stopVal [duration (s)] = 0.08
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    TextComponent experiment_question_red
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 2
      text = 红色数字是几？
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    TextComponent experiment_question_green
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 3.8
      stopVal [duration (s)] = 2
      text = 绿色数字是几？
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    KeyboardComponent experiment_response_red
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 2.2
      store = nothing
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    KeyboardComponent experiment_response_green
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0''1','2','3','4''5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 3.8
      stopVal [duration (s)] = 2.2
      store = nothing
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"
  Routine experiment_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random

        shownum = []
        experiment_examples = experiment_block_nums*experiment_block_trials
        for i in range(experiment_examples):
            shownum.append(0)

        # ratio of all should be seven
        positive_count = int(experiment_examples*experiment_positive_ratio)

        for i in range(positive_count):
            x = random.randint(0 , experiment_examples-1)
            if shownum[x]== 1 :
                i = i -1;
            else :
                shownum[x] = 1

        for i in range(experiment_examples):
            if shownum[i]==1:
                shownum[i] = "7"
            else:
                num = random.randint(0,9)
                if(num==7):
                    num-=3
                shownum[i] = str(num)
  Routine practice_prepare_2
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        corrent = practice_pressed and shownum[practice_block.thisRepN]=="7" or not practice_pressed and shownum[practice_block.thisRepN]!="7"
        if(corrent):
            practice_response_tip.text = "正确"
        else:
          practice_response_tip.text = "错误"
Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_trial
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_trial
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
