PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = cpt
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent variable_init
      Code Type = Auto->JS
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      Before Experiment:
        #创建变量时不需要$，引用时才需要


        # 参数接收模块 #bnu
        # 在PsychoPy Builder中测试时注释掉sys.argv并手动输入参数
        RECORD_NAME = sys.argv[1]
        DATA_ROOT = sys.argv[2]
        SUBJECT_NAME = sys.argv[3]
        BLOCK_NUMS = int(sys.argv[4])
        BLOCK_TRIALS = int(sys.argv[5])

        # 脑电连接模块 bnu
        import socket
        import tkinter.messagebox
        host = '127.0.0.1'
        goodportary =[]
        portstart = 9230
        for i in range(0,10):
            fg = True
            c=socket.socket(socket.AF_INET,socket.SOCK_STREAM)
            c.settimeout(1.5)
            try:
                c.connect((host,portstart))
            except:
                print('bad port')
                fg = False
            if fg :
                goodportary.append(c)
            portstart = portstart + 1
        if len(goodportary) == 0:
            tkinter.messagebox.showinfo('错误','脑电采集设备未连接')
            core.quit()
        inputData = bytes([0x55,0x01,0x5a,0x07,0x45,0x56,0x45,0x4e,0x54,0x5f,0x41,0xd9])
        mark_up = bytes([0x55,0x01,0x5a,0x01,0x0b,0xbc])
        mark_down = bytes([0x55,0x01,0x5a,0x01,0x16,0xc7])
        mark_left = bytes([0x55,0x01,0x5a,0x01,0x15,0xc6])
        mark_rig = bytes([0x55,0x01,0x5a,0x01,0x0c,0xbd])
        mark_resrig = bytes([0x55,0x01,0x5a,0x01,0x9a,0x4b])
        mark_reswrg = bytes([0x55,0x01,0x5a,0x01,0x9b,0x4c])
        mark_start = bytes([0x55,0x01,0x5a,0x01,0x51,0x02])
        mark_end = bytes([0x55,0x01,0x5a,0x01,0x52,0x03])
        mark_weizhi = [mark_rig,mark_down,mark_left,mark_up]

        # TEXT CONFIG
        guide_text = "您好，欢迎参加本次实验\n在实验过程中，屏幕中央会呈现一个“＋”\n在“＋”的四周会呈现很多的方块和一个圆形\n请注视屏幕中央，用余光寻找圆形图案\n当圆形出现在屏幕上方时按“F”做出反应，\n当圆形出现在屏幕下方时按“J”做出反应\n明白实验后按空格键进入练习。"
        practice_confirm_text = "练习已结束，\n若您已了解本实验操作请按“Y”键，进入正式实验；\n若您还未熟悉实验操作请按“N”键，重新进行练习。"
        experiment_rest_text = "请休息一下，当您觉得状态恢复良好时\n可随时按空格键继续。"
        experiment_end_text = "实验结束，感谢参与\n按空格退出"

        # CONDITIONAL FLAG
        experiment_stage = "before_experiment"
        experiment_block_idx = 1

        # PRACTICE CONFIG
        practice_repeats = 8
        practice_idx = 0

        # EXPERIMENT CONFIG
        experiment_block_nums = BLOCK_NUMS#bnu
        experiment_block_trials = BLOCK_TRIALS#bnu
        experiment_idx = 0



        # DATA PREPARE
        import itertools
        show_orders = []
        for x in  itertools.permutations([1, 2, 3, 4],4):
            show_orders.append(x)

        orders_count = len(show_orders)

        order_mapping = ["f","j","j","f"]
      Begin Experiment:
        # CONDITIONAL FLAG
        experiment_stage = "begin_experiment"
      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init"
      End Experiment:
        for c in goodportary:#bnu
            try:
                c.send(mark_end)
            except:
                tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                core.quit()


        # CONDITIONAL FLAG
        experiment_stage = "end_experiment"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "init.end"
  Routine guide
    TextComponent guide_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $guide_text
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    KeyboardComponent guide_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide"
      End Routine:
        # CONDITIONAL FLAG
        experiment_stage = "guide.end"
  Routine practice_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"
        practice_answer = None

        # UPDATE TEXT
        group_id = practice_order_table[(int)(practice_idx/4)]
        show_id = show_orders[group_id][(practice_idx+1)%4] - 1

        thisExp.addData("show",order_mapping[show_id])

        circles = [circle_1,circle_2,circle_3,circle_4]
        rects = [rect_6,rect_9,rect_10,rect_13]

        for i in range(0,4):
            if i==show_id:
                circles[i].opacity = 1
                rects[i].opacity = 0
            else:
                circles[i].opacity = 0
                rects[i].opacity = 1
      Each Frame:
        if(practice_answer==None and practice_response.status==STARTED and len(practice_response.keys)>0):
            practice_answer = practice_response.keys[0]
            thisExp.addData('practice_response.answer', practice_answer)
            thisExp.addData('practice_response.reacttime', t-practice_response.tStart)


        # bnu
        if practice_cross.status == STARTED:
            if tThisFlipGlobal > practice_cross.tStartRefresh + 1-frameTolerance:
                for c in goodportary:#bnu
                    try:
                        c.send(mark_weizhi[show_id])
                    except:
                        tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                        core.quit()
      End Routine:
        thisExp.addData('practice_response.enable', practice_response.tStart)
    KeyboardComponent practice_response
      allowedKeys = 'f','j'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      store = nothing
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    TextComponent practice_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    PolygonComponent rect_1
      fillColor = white
      ori = 45
      pos = (0.15, 0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_2
      fillColor = white
      ori = 45
      pos = (0.27, 0.27)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_3
      fillColor = white
      ori = 45
      pos = (0.4, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_4
      fillColor = white
      ori = 45
      pos = (-0.4, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_5
      fillColor = white
      ori = 45
      pos = (0, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_6
      fillColor = white
      ori = 45
      pos = (0.35, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_7
      fillColor = white
      ori = 45
      pos = (0.35, -0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_8
      fillColor = white
      ori = 45
      pos = (0.27, -0.27)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_9
      fillColor = white
      ori = 45
      pos = (0.15, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_10
      fillColor = white
      ori = 45
      pos = (-0.35, -0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_11
      fillColor = white
      ori = 45
      pos = (-0.15, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_12
      fillColor = white
      ori = 45
      pos = (-0.27, -0.27)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_13
      fillColor = white
      ori = 45
      pos = (-0.15, 0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_14
      fillColor = white
      ori = 45
      pos = (-0.27, 0.27)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_15
      fillColor = white
      ori = 45
      pos = (0, 0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent rect_16
      fillColor = white
      ori = 45
      pos = (-0.35, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent circle_1
      fillColor = white
      pos = (0.35, 0.15)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent circle_2
      fillColor = white
      pos = (0.15, -0.35)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent circle_3
      fillColor = white
      pos = (-0.35, -0.15)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent circle_4
      fillColor = white
      pos = (-0.15, 0.35)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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  Routine practice_confirm
    TextComponent practice_confirm_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $practice_confirm_text
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    KeyboardComponent practice_confirm_trigger
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_confirm"
      End Routine:
        if(practice_confirm_trigger.keys[0]=='y'):
            practice_loop.finished = True
  Routine experiment_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice"
        experiment_answer = None

        # UPDATE TEXT
        group_id = experiment_order_table[(int)(experiment_idx/4)]
        show_id = show_orders[group_id][(experiment_idx+1)%4] - 1

        thisExp.addData("show",order_mapping[show_id])

        circles = [experiment_circle1,experiment_circle2,experiment_circle3,experiment_circle4]
        rects = [experiment_rect6,experiment_rect9,experiment_rect10,experiment_rect13]

        for i in range(0,4):
            if i==show_id:
                circles[i].opacity = 1
                rects[i].opacity = 0
            else:
                circles[i].opacity = 0
                rects[i].opacity = 1




        experiment_idx+=1
        thisExp.addData("index",experiment_idx)
      Each Frame:
        if(experiment_answer==None and experiment_response.status==STARTED and len(experiment_response.keys)>0):
            experiment_answer = experiment_response.keys[0]
            thisExp.addData('experiment_response.answer', experiment_answer)
            thisExp.addData('experiment_response.reacttime', t-experiment_response.tStart)

        # bnu
        if experiment_cross.status == STARTED:
            if tThisFlipGlobal > experiment_cross.tStartRefresh + 1-frameTolerance:
                for c in goodportary:#bnu
                    try:
                        c.send(mark_weizhi[show_id])
                    except:
                        tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                        core.quit()
      End Routine:
        correct = order_mapping[show_id]==experiment_answer

        thisExp.addData("correct",correct)

        #bnu
        if correct:
            for c in goodportary:
                try:
                    c.send(mark_resrig)
                except:
                    tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                    core.quit()
        else:
            for c in goodportary:
                try:
                    c.send(mark_reswrg)
                except:
                    tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                    core.quit()

        thisExp.addData('experiment_response.enable', experiment_response.tStart)
    KeyboardComponent experiment_response
      allowedKeys = 'f','j'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      store = nothing
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    TextComponent experiment_cross
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    PolygonComponent experiment_rect1
      fillColor = white
      ori = 45
      pos = (0.15, 0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect2
      fillColor = white
      ori = 45
      pos = (0.27, 0.27)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect3
      fillColor = white
      ori = 45
      pos = (0.4, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect4
      fillColor = white
      ori = 45
      pos = (-0.4, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect5
      fillColor = white
      ori = 45
      pos = (0, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect6
      fillColor = white
      ori = 45
      pos = (0.35, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect7
      fillColor = white
      ori = 45
      pos = (0.35, -0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect8
      fillColor = white
      ori = 45
      pos = (0.27, -0.27)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect9
      fillColor = white
      ori = 45
      pos = (0.15, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect10
      fillColor = white
      ori = 45
      pos = (-0.35, -0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect11
      fillColor = white
      ori = 45
      pos = (-0.15, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect12
      fillColor = white
      ori = 45
      pos = (-0.27, -0.27)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect13
      fillColor = white
      ori = 45
      pos = (-0.15, 0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect14
      fillColor = white
      ori = 45
      pos = (-0.27, 0.27)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect15
      fillColor = white
      ori = 45
      pos = (0, 0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_rect16
      fillColor = white
      ori = 45
      pos = (-0.35, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_circle1
      fillColor = white
      pos = (0.35, 0.15)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_circle2
      fillColor = white
      pos = (0.15, -0.35)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_circle3
      fillColor = white
      pos = (-0.35, -0.15)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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    PolygonComponent experiment_circle4
      fillColor = white
      pos = (-0.15, 0.35)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
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  Routine experiment_rest
    TextComponent experiment_rest_tip
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      text = $experiment_rest_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #UPDATE TEXT
        if(experiment_block_idx==experiment_block_nums):
            experiment_rest_tip.text = experiment_end_text
      End Routine:
        #CONDITIONAL FLAG
        experiment_stage = "experiment_rest.end"
        experiment_block_idx += 1
    KeyboardComponent experiment_rest_skip_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_prepare
    CodeComponent init_practice
      Code Type = Auto->JS
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      Begin Routine:
        # CONDITIONAL FLAG
        experiment_stage = "practice_prepare"

        # DATA PREPARE
        import random

        practice_order_table = []
        for i in range(0,practice_repeats):
            x = random.randint(0,orders_count-1)
            practice_order_table.append(x)
      End Routine:
        for c in goodportary:#bnu
            try:
                c.send(mark_start)
        except:
            tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
            core.quit()
  Routine experiment_prepare
    CodeComponent init_experiment
      Code Type = Auto->JS
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      Begin Routine:
        for c in goodportary:#bnu
            try:
                c.send(mark_end)
            except:
                tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                core.quit()

        # CONDITIONAL FLAG
        experiment_stage = "experiment_prepare"

        # DATA PREPARE
        import random

        experiment_order_table = []
        for i in range(0,experiment_block_nums*experiment_block_trials):
            x = random.randint(0,orders_count-1)
            experiment_order_table.append(x)
      End Routine:
        for c in goodportary:#bnu
            try:
                c.send(mark_start)
            except:
                tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                core.quit()
  Routine practice_prepare_2
  Routine practice_feedback
    TextComponent practice_response_tip
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent practice_judge
      Code Type = Auto->JS
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      Begin Routine:
        correct = order_mapping[show_id]==practice_answer
        if(correct):
            practice_response_tip.text = "正确"
        else:
          practice_response_tip.text = "错误"

        #bnu
        if correct:
            for c in goodportary:
                try:
                    c.send(mark_resrig)
                except:
                    tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                    core.quit()
        else:
            for c in goodportary:
                try:
                    c.send(mark_reswrg)
                except:
                    tkinter.messagebox.showinfo('错误','脑电采集设备连接断开')
                    core.quit()

        thisExp.addData("correct",correct)
      End Routine:
        practice_idx += 1
Flow
  Routine init
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 65535
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    Routine guide
    Routine practice_prepare
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = practice_repeats
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      Routine practice_trial
      Routine practice_feedback
    LoopTerminator practice_block
    Routine practice_confirm
  LoopTerminator practice_loop
  Routine experiment_prepare
  LoopInitiator experiment_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = experiment_block_nums
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    LoopInitiator experiment_block loopType="TrialHandler"
      loopType = random
      nReps = experiment_block_trials
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      Routine experiment_trial
    LoopTerminator experiment_block
    Routine experiment_rest
  LoopTerminator experiment_loop
